PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 1067]
  color = 1.0000, 1.0000, 1.0000
  expName = daily_rountine
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine task_2
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    ImageComponent passive_img
      size = (0.56,0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        i=0
        if args.side == "right":
            passive_img.image = "static/images/daily_passive_right.png"
        else:
            passive_img.image = "static/images/daily_passive_left.png"
      Each Frame:
        if i== 59:
        #    win.callOnFlip(trigger.send_trigger,0x04)
            hand_device.start('flex')
            i+=1
        else:
            i+=1
    SoundComponent sound_14
      disabled = True
      sound [set every repeat] = static/audios/任务3_被动.wav
      startVal [time (s)] = 1
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  Routine task_1
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    ImageComponent elbow_img
      color = 1.0000, 1.0000, 1.0000
      size = (0.56,0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        i=0
        cnt1 = trials.thisN+1
        if args.side == "right":
            if cnt1 in elbow_opposite:
                elbow_img.image = "static/images/daily_elbow_left.png"
                trigger_elbow = 0x08
                trigger_rest = 0x09
            else:
                elbow_img.image = "static/images/daily_elbow_right.png"
                trigger_elbow = 0x02
                trigger_rest = 0x03
        else:
            if cnt1 in elbow_opposite:
                elbow_img.image = "static/images/daily_elbow_right.png"
                trigger_elbow = 0x02
                trigger_rest = 0x03
            else:
                elbow_img.image = "static/images/daily_elbow_left.png"
                trigger_elbow = 0x08
                trigger_rest = 0x09
      Each Frame:
        #if i== 59:
        #    win.callOnFlip(trigger.send_trigger,trigger_elbow)
        #    i+=1
        #else:
        #    i+=1
    SoundComponent sound_6
      disabled = True
      sound [set every repeat] = static/audios/任务2_肘部.wav
      startVal [time (s)] = 1
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  Routine resting
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    ImageComponent image_3
      image = static/images/daily_resting.png
      size = (662, 500)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 120
      units = pix
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    CodeComponent code_1
      Code Type = Py
      disabled = True
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      Begin Routine:
        i=0
      Each Frame:
        if i== 59:
            win.callOnFlip(trigger.send_trigger,0x01)
            i+=1
        else:
            i+=1
    SoundComponent sound_7
      disabled = True
      sound [set every repeat] = static/audios/任务1_静息.wav
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    SoundComponent sound_16
      disabled = True
      sound [set every repeat] = static/audios/ding.wav
      startVal [time (s)] = 120
      stopVal [duration (s)] = 1.0
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  Routine prepare_2
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    TextComponent passive_prepare
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    SoundComponent sound_3
      disabled = True
      sound [set every repeat] = static/audios/准备3_被动.wav
      startVal [time (s)] = 1
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        prepare_text2 = "下一个部分是：感受手部运动\n\n请您感受手部握拳然后保持的过程\n您需要完成这个动作"+str(args.trial_num)+"次,每次5秒\n\n如果准备好了，请按空格键"
        passive_prepare.text = prepare_text2
  Routine prepare_1
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    TextComponent elbow_prepare
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    SoundComponent sound_2
      disabled = True
      sound [set every repeat] = static/audios/准备2_肘部.wav
      startVal [time (s)] = 1
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        prepare_text1 = "下一个部分是：肘部运动\n\n这个任务需要您根据屏幕提示\n尝试弯曲肘部，然后放下\n您需要完成这个动作"+str(args.trial_num)+"次\n\n如果准备好了，请按空格键"
        elbow_prepare.text = prepare_text1
  Routine prepare_3
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    TextComponent active_prepare
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    SoundComponent sound_4
      disabled = True
      sound [set every repeat] = static/audios/准备4_主动.wav
      startVal [time (s)] = 1
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        prepare_text3 = "最后一个部分：尝试握拳运动\n\n请您根据屏幕提示\n尝试握拳，然后尽量保持握拳的姿势\n您需要完成这个动作"+str(args.trial_num)+"次,每次5秒\n\n如果准备好了，请按空格键"
        active_prepare.text = prepare_text3
  Routine task_3
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    ImageComponent active_img
      size = (0.56,0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        i=0
        cnt2 = trials_3.thisN+1
        if args.side == "right":
            if cnt2 in hand_opposite:
                active_img.image = "static/images/daily_active_left.png"
                trigger_active = 0x0A
                trigger_rest = 0x0B
            else:
                active_img.image = "static/images/daily_active_right.png"
                trigger_active = 0x06
                trigger_rest = 0x07

        else:
            if cnt2 in hand_opposite:
                active_img.image = "static/images/daily_active_right.png"
                trigger_active = 0x06
                trigger_rest = 0x07
            else:
                active_img.image = "static/images/daily_active_left.png"
                trigger_active = 0x0A
                trigger_rest = 0x0B
      Each Frame:
        #if i== 59:
        #    win.callOnFlip(trigger.send_trigger,trigger_active)
        #    i+=1
        #else:
        #    i+=1
    SoundComponent sound_15
      disabled = True
      sound [set every repeat] = static/audios/任务4_主动.wav
      startVal [time (s)] = 1
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  Routine done
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    TextComponent end
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 8
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      text:
        恭喜您完成了所有任务！
        非常感谢您的配合！
    SoundComponent sound_5
      disabled = True
      sound [set every repeat] = static/audios/结束.wav
      startVal [time (s)] = 1
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  Routine rest_1
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    ImageComponent image_2
      color = 1.0000, 1.0000, 1.0000
      image = static/images/rest.png
      size = (0.56,0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        #win.callOnFlip(trigger.send_trigger,trigger_rest)
    SoundComponent sound_8
      disabled = True
      sound [set every repeat] = static/audios/ding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_9
      disabled = True
      sound [set every repeat] = static/audios/放松.wav
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 3
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  Routine rest_2
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    ImageComponent image_6
      image = static/images/rest.png
      size = (0.56,0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        #win.callOnFlip(trigger.send_trigger,0x05)
        hand_device.start('rest')
    SoundComponent sound_10
      disabled = True
      sound [set every repeat] = static/audios/ding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_11
      disabled = True
      sound [set every repeat] = static/audios/放松.wav
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 3
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  Routine rest_3
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    ImageComponent image_7
      image = static/images/rest.png
      size = (0.56,0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        #win.callOnFlip(trigger.send_trigger,trigger_rest)
    SoundComponent sound_12
      disabled = True
      sound [set every repeat] = static/audios/ding.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_13
      disabled = True
      sound [set every repeat] = static/audios/放松.wav
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 3
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  Routine prepare_0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        第一个任务即将开始
        请您放松身体，保持安静

        任务时长：2分钟

        如果准备好了，请按空格键
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent config
      Code Type = Py
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      Before Experiment:
        import argparse
        #from device.trigger_box import TriggerNeuracle
        from device.fubo_pneumatic_finger import FuboPneumaticFingerClient
        # get train params
        def parse_args():
            parser = argparse.ArgumentParser(
                description='Daily routine'
            )
            parser.add_argument(
                '--side',
                dest='side',
                help='left hand or right hand',
                type=str
            )
            parser.add_argument(
                '--trial-num',
                dest='trial_num',
                help='total trial number',
                type=int
            )
            parser.add_argument(
                '--major-side-num',
                dest='major_side_num',
                help='trial number of major side',
                type=int
            )
        #    parser.add_argument(
        #        '--trigger-port',
        #        dest='trigger_port',
        #        help='Triggerbox serial port',
        #        type=str
        #    )
            parser.add_argument(
                '--hand-port',
                dest='hand_port',
                help='Peripheral serial port',
                type=str
            )
            return parser.parse_args()
        args = parse_args()

        # connect to trigger box
        #trigger = TriggerNeuracle(port=args.trigger_port)
        hand_device = FuboPneumaticFingerClient(init_params={'port': args.hand_port})
    SoundComponent sound_1
      disabled = True
      sound [set every repeat] = static/audios/准备1_静息.wav
      startVal [time (s)] = 0.5
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    CodeComponent assign_L_R_trails
      Code Type = Py
      Before Experiment:
        import random
        trials_list = []
        for i in range(args.trial_num):
            trials_list.append(i+1)

        random.shuffle(trials_list)
        elbow_opposite = trials_list[:(args.trial_num-args.major_side_num)]
        print("elbow_opposite:",sorted(elbow_opposite))
        random.shuffle(trials_list)
        hand_opposite = trials_list[:(args.trial_num-args.major_side_num)]
        print("hand_opposite:",sorted(hand_opposite))
Flow
  Routine prepare_0
  Routine resting
  Routine prepare_1
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = args.trial_num
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    Routine task_1
    Routine rest_1
  LoopTerminator trials
  Routine prepare_2
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = args.trial_num
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    Routine task_2
    Routine rest_2
  LoopTerminator trials_2
  Routine prepare_3
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = args.trial_num
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    Routine task_3
    Routine rest_3
  LoopTerminator trials_3
  Routine done
